CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "_ch1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch2")
    Name to assign these images:FOXO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch3")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_ch4")
    Name to assign these images:DIC
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:DAPI
    Name the output image:DAPI_cropped_original
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:300,1700
    Top and bottom rectangle positions:300,1700
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    Remove empty rows and columns?:All
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
Crop:[module_num:6|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
    Select the input image:FOXO
    Name the output image:FOXO_cropped_original
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:300,1700
    Top and bottom rectangle positions:300,1700
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    Remove empty rows and columns?:All
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
Crop:[module_num:7|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
    Select the input image:Actin
    Name the output image:Actin_cropped_original
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:300,1700
    Top and bottom rectangle positions:300,1700
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    Remove empty rows and columns?:All
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
Crop:[module_num:8|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
    Select the input image:DIC
    Name the output image:DIC_cropped_original
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:300,1700
    Top and bottom rectangle positions:300,1700
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    Remove empty rows and columns?:All
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DAPI_cropped_original
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:Actin_cropped_original
    Name the output image:IllumActin
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:11|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
    Select the input image:FOXO_cropped_original
    Name the output image:IllumFOXO
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:12|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
    Select the input image:DIC_cropped_original
    Name the output image:IllumDIC
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:13|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
    Select the input image:FOXO_cropped_original
    Name the output image:FOXO_cropped
    Select the illumination function:IllumFOXO
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:14|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
    Select the input image:Actin_cropped_original
    Name the output image:Actin_cropped
    Select the illumination function:IllumFOXO
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:15|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
    Select the input image:DAPI_cropped_original
    Name the output image:DAPI_cropped
    Select the illumination function:IllumFOXO
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

CorrectIlluminationApply:[module_num:16|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
    Select the input image:DIC_cropped_original
    Name the output image:DIC_cropped
    Select the illumination function:IllumDIC
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify the nuclei from the DAPI image. Three-class thresholding performs better than the default two-class thresholding in this case.']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
    Select the input image:DAPI_cropped
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Display accepted local maxima?:No
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:.95
    Lower and upper bounds on threshold:0,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:6
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    Thresholding method:Otsu

IdentifySecondaryObjects:[module_num:18|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notes:['Identify the cells by using the nuclei as a “seed” region, then growing outwards until stopped by the image threshold or by a neighbor. The Propagation method is used to delineate the boundary between neighboring cells.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:FOXO_cropped
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:10
    Threshold correction factor:.95
    Lower and upper bounds on threshold:0,1
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    Log transform before thresholding?:No
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
ExpandOrShrinkObjects:[module_num:19|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
    Select the input objects:Cells
    Name the output objects:ExpandCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

IdentifyTertiaryObjects:[module_num:20|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notes:['Identify the cytoplasm by “subtracting” the nuclei objects from the cell objects.']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
    Select the larger identified objects:ExpandCells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExpandOrShrinkObjects:[module_num:21|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
    Select the input objects:Nuclei
    Name the output objects:ShrunkenNuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:22|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
    Select the input objects:Cells
    Name the output objects:ShrunkenCells
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:2
    Fill holes in objects so that all objects shrink to a single point?:No

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:Actin_cropped, Actin_cropped_original, DAPI_cropped, DAPI_cropped_original, FOXO_cropped, FOXO_cropped_original
    Select objects to measure:Cytoplasm, ExpandCells, Nuclei

MeasureImageIntensity:[module_num:24|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
    Select images to measure:Actin_cropped, Actin_cropped_original, DAPI_cropped, DAPI_cropped_original, FOXO_cropped, FOXO_cropped_original
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:Cells, Cytoplasm, ExpandCells, Nuclei
    Calculate custom percentiles:No
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
MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:Cytoplasm, ExpandCells, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

OverlayObjects:[module_num:26|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
    Input:DAPI_cropped
    Name the output image:Overlay_DAPI
    Objects:Nuclei
    Opacity:1

OverlayObjects:[module_num:27|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
    Input:FOXO_cropped
    Name the output image:Overlay_cytoplasm
    Objects:Cytoplasm
    Opacity:1

ConvertObjectsToImage:[module_num:28|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
    Select the input objects:ShrunkenCells
    Name the output image:Cellimage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:FOXO_cropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FOXO_cropped
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:Actin_cropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Actin_cropped
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:DAPI_cropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DAPI_cropped
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:DIC_cropped
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_DIC_cropped
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:33|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notes:['Save the color image as an 8-bit TIF, appending the text RBG to the original filename of the DAPI image.']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
    Select the type of image to save:Image
    Select the image to save:Cellimage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:
    Saved file format:png
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Overlay_cytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cytoplasm_overlay
    Saved file format:png
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:35|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
    Select the type of image to save:Image
    Select the image to save:Overlay_DAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei_overlay
    Saved file format:png
    Output file location:Default Input Folder sub-folder|cellprofiler_output/mask
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:36|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei, cell and cytoplasm objects will be saved to separate .csv files, in addition to the per-image .csv’s.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|cellprofiler_output/data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|Intensity_IntegratedIntensity_Actin_cropped,Nuclei|Intensity_IntegratedIntensity_Actin_cropped_original,Nuclei|Intensity_IntegratedIntensity_FOXO_cropped,Nuclei|Intensity_IntegratedIntensity_FOXO_cropped_original,Nuclei|Intensity_IntegratedIntensity_DAPI_cropped,Nuclei|Intensity_IntegratedIntensity_DAPI_cropped_original,Nuclei|Intensity_StdIntensityEdge_FOXO_cropped,Nuclei|Intensity_StdIntensityEdge_FOXO_cropped_original,Nuclei|Intensity_StdIntensityEdge_Actin_cropped,Nuclei|Intensity_StdIntensityEdge_Actin_cropped_original,Nuclei|Intensity_StdIntensityEdge_DAPI_cropped,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
    File name:Image.csv
    Use the object name for the file name?:No
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:ExpandCells
    Combine these object measurements with those of the previous object?:No
    File name:Cells.csv
    Use the object name for the file name?:No
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
    File name:Cytoplasm.csv
    Use the object name for the file name?:No
